/*
Program:	as_iproc1h
Version:	1.0
Author:		Sean Lynn
Date:     11/1/2007
Description:	process to get correct phase and reference parameters,
              plot spectra,
							create and archive pdf, 
							delete processed data, copy raw data and correct proc parameters to archive, 
							reprocess so complete data is available on instrument.
*/

char pdf_Name[PATH_MAX] = "";
char szFileStatus[20] = "";
char szTypeOfData[20] = "";
char cmdstr[200] = "";
char procnoPath[PATH_MAX] = "";

//process
GETCURDATA
EF
APKS
XAU("as_phase1d")
SREF
XAU("set_sreglist")
ABS
XAU("as_cycalc")

//plot to pdf
STOREPAR("layout","+/as_1h.xwp") 
//AUTOPLOT
AUTOPLOT_TO_FILE("1d.pdf")
STOREPAR("layout","+/as_1hexp.xwp") 
//AUTOPLOT
AUTOPLOT_TO_FILE("1d_exp.pdf")

//archive pdf
GetPdfFilePath( pdf_Name, szFileStatus );
sprintf( cmdstr, "pdftk 1d.pdf 1d_exp.pdf cat output %s dont_ask ", pdf_Name );
system( cmdstr );
FETCHPAR("PULPROG", szTypeOfData)
szTypeOfData[5]=NULL;
UpdateWorkLog( szTypeOfData, pdf_Name, szFileStatus );
STOREPAR( "layout", "+/as_1h.xwp") 

//delete processed data
sprintf( procnoPath, "%s/data/%s/nmr/%s/%d/pdata/%d", disk, user, name, expno, procno );
i1 = unlinkpr( procnoPath );

//change process program to not archive version
STOREPAR("AUNMP", "as_proc1h")

//archive spectra
XAU("as_cp2archive")

//regenerate processed data
EFP
ABS

QUIT

#include "C:\Bruker\TOPSPIN\exp\stan\nmr\au\src\as_pdf_common.inc"
#include <inc/sysutil>
