/*
Program:	as_iconproccosy
Version:	1.0
Author:		Sean Lynn
Date:     12/1/2007
Description:	process to get correct phase and reference parameters,
              plot spectra,
							create and archive pdf, 
							delete processed data, copy raw data and correct proc parameters to archive, 
							reprocess so complete data is available on instrument.
*/

char pdf_Name[PATH_MAX] = "";
char szFileStatus[20] = "";
char szTypeOfData[20] = "";
char cmdstr[200] = "";
char procnoPath[PATH_MAX] = "";

GETCURDATA
//process
XFB
ABS1
ABS2
XAU("as_projref")
LEVCALC
//plot and create archive pdf
//AUTOPLOT
GetPdfFilePath( pdf_Name, szFileStatus );
AUTOPLOT_TO_FILE(pdf_Name)

FETCHPAR("PULPROG", szTypeOfData)
szTypeOfData[5]=NULL;
UpdateWorkLog( szTypeOfData, pdf_Name, szFileStatus );

//delete processed data
sprintf( procnoPath, "%s/data/%s/nmr/%s/%d/pdata/%d", disk, user, name, expno, procno );
i1 = unlinkpr( procnoPath );

//set processing program to not archive version
STOREPAR("AUNMP", "as_proccosy")

//archive data
XAU("as_cp2archive")

//regenerate processed data
XFB
ABS1
ABS2
LEVCALC

QUIT

#include "C:\Bruker\TOPSPIN\exp\stan\nmr\au\src\as_pdf_common.inc"
#include "C:\Bruker\TOPSPIN\exp\stan\nmr\au\src\as_sysutil.inc"