/*
Program:	as_iprochmbc
Version:	1.0
Author:		Sean Lynn
Date:     12/1/2007
Description:	process to get correct phase and reference parameters,
              plot spectra,
							create and archive pdf, 
							delete processed data, copy raw data and correct proc parameters to archive, 
							reprocess so complete data is available on instrument.
*/

char pdf_Name[PATH_MAX] = "";
char szFileStatus[20] = "";
char szTypeOfData[20] = "";
char cmdstr[200] = "";
char procnoPath[PATH_MAX] = "";

GETCURDATA
//process data
XFB
XF2M
XAU("as_projref")
//set layout according to presence of 13c
GETCURDATA3
if ( expno3 == expno )
	{
	STOREPAR("layout", "+/as_hsqcno13c.xwp")
	}
if ( expno3 != expno)
	{
	STOREPAR("layout", "+/as_hsqc.xwp")
	}
LEVCALC
//create pdf in archive
GetPdfFilePath( pdf_Name, szFileStatus );
AUTOPLOT_TO_FILE(pdf_Name)
FETCHPAR("PULPROG", szTypeOfData)
szTypeOfData[5]=NULL;
UpdateWorkLog( szTypeOfData, pdf_Name, szFileStatus );
//delete processed data
sprintf( procnoPath, "%s/data/%s/nmr/%s/%d/pdata/%d", disk, user, name, expno, procno );
i1 = unlinkpr( procnoPath );
//set process program to not archive data
STOREPAR("AUNMP", "as_prochmbc")
//archive data
XAU("as_cp2archive")
//regenerate processed data
XFB
XF2M
LEVCALC

QUIT

#include "C:\Bruker\TOPSPIN\exp\stan\nmr\au\src\as_pdf_common.inc"
#include "C:\Bruker\TOPSPIN\exp\stan\nmr\au\src\as_sysutil.inc"