/*
Program:	as_iconprochsqc
Version:	1.0
Author:		Sean Lynn
Date:     12/1/2007
Description:	process to get correct phase and reference parameters,
              plot spectra,
							create and archive pdf, 
							delete processed data, copy raw data and correct proc parameters to archive, 
							reprocess so complete data is available on instrument.
*/

char pdf_Name[PATH_MAX] = "";
char szFileStatus[20] = "";
char szTypeOfData[20] = "";
char cmdstr[200] = "";
char procnoPath[PATH_MAX] = "";
float hsr;

GETCURDATA
//process data
XFB
XAU("as_phasehsqc")
XAU("as_projref")
FETCHPAR("SR",&hsr)
hsr=hsr-2.0; /* Sean thinks this is due to an isotope shift */
STOREPAR("SR",hsr)
//check for 13c and set layout accordingly
GETCURDATA3
if ( expno3 == expno )
	{
	STOREPAR("layout", "+/as_hmbcno13c.xwp")
	}
if ( expno3 != expno)
	{
	STOREPAR("layout", "+/as_hmbc.xwp")
	}
LEVCALC

//create pdf in archive
GetPdfFilePath( pdf_Name, szFileStatus );
AUTOPLOT_TO_FILE(pdf_Name)
FETCHPAR("PULPROG", szTypeOfData)
szTypeOfData[5]=NULL;
UpdateWorkLog( szTypeOfData, pdf_Name, szFileStatus );

//delete processed data
sprintf( procnoPath, "%s/data/%s/nmr/%s/%d/pdata/%d", disk, user, name, expno, procno );
i1 = unlinkpr( procnoPath );
//set process program to not archive data
STOREPAR("AUNMP", "as_prochsqc")
//archive data
XAU("as_cp2archive")
//regenerate processed data
XFB
LEVCALC

QUIT

#include "C:\Bruker\TOPSPIN\exp\stan\nmr\au\src\as_pdf_common.inc"
#include "C:\Bruker\TOPSPIN\exp\stan\nmr\au\src\as_sysutil.inc"