/*
Program:	as_iprocroesy
Version:	1.0
Author:		Sean Lynn
Date:     12/1/2007
Description:	process to get correct phase and reference parameters,
              plot spectra,
							create and archive pdf, 
							delete processed data, copy raw data and correct proc parameters to archive, 
							reprocess so complete data is available on instrument.
*/

char pdf_Name[PATH_MAX] = "";
char szFileStatus[20] = "";
char szTypeOfData[20] = "";
char cmdstr[200] = "";
char procnoPath[PATH_MAX] = "";

GETCURDATA
//process
XFB
XAU("as_phaseroesy")
XAU("as_projref")
ABS1
ABS2
LEVCALC
VIEWDATA_SAMEWIN
//create pdf in archive
GetPdfFilePath( pdf_Name, szFileStatus );
AUTOPLOT_TO_FILE(pdf_Name)
FETCHPAR("PULPROG", szTypeOfData)
szTypeOfData[5]=NULL;
UpdateWorkLog( szTypeOfData, pdf_Name, szFileStatus );
//delete processed data
sprintf( procnoPath, "%s/data/%s/nmr/%s/%d/pdata/%d", disk, user, name, expno, procno );
i1 = unlinkpr( procnoPath );
//set process program to not archive data
STOREPAR("AUNMP", "as_procroesy")
//copy to archive
XAU("as_cp2archive")
//regenerate processed data
XFB
LEVCALC

QUIT

#include "C:\Bruker\TOPSPIN\exp\stan\nmr\au\src\as_pdf_common.inc"
#include <inc/sysutil>