/*made by GSK originally, slightly modded by DJH at Cambridge UNi*/

#include <stdio.h>
#include <inc/sysutil>

char homepul[40], pul[40], directory[40], data_File[80], nuc1[20], nuc2[20],au_p[64];
int mode, dexpno, i_expno, i_limit, Hexpno, Cexpno;
float Hsr, Csr;

Hexpno=0;
Cexpno=0;
i_expno=1;
Hsr=0.0;
Csr=0.0;

GETCURDATA
dexpno = expno;

FETCHPAR("PULPROG", &homepul)

(void) sprintf(directory, "%s%s/%s", disk, user, name);
i_limit = gethighest(directory);

if( i_limit > 999 ) i_limit = 999;

while (i_expno < i_limit)
{
sprintf( data_File, "%s%s/%s/%d/pulseprogram", disk, user, name, i_expno );
if( access( data_File, R_OK ) == 0 )
 {
 DATASET(name, i_expno, procno, disk, user)
 VIEWDATA_SAMEWIN
 SETCURDATA
 FETCHPAR("PULPROG", &pul)
 FETCHPAR("NUC1",nuc1)
 FETCHPAR("NUC2",nuc2)
 if  (strstr(pul, "zg30" ) && (!strcmp(nuc1,"1H")))
	{
	sprintf(au_p,"service-1h-proc");
		STOREPAR("AUNMP", au_p)
	XAU("service-1h-proc",cmd);
	break;
	}
  if ((strstr(pul, "zgpg30")) || (strstr(pul, "zgdc30")))
	{
	sprintf(au_p,"service-13c-proc");
		STOREPAR("AUNMP", au_p)
	XAU("service-13c-proc",cmd);
	break;
	}
  if ((strstr(pul, "dept")) || (strstr(pul, "apt")))
	{
	sprintf(au_p,"service-dept-proc");
		STOREPAR("AUNMP", au_p)
	XAU("service-dept-proc",cmd); 
  break;
	}
  if ((strstr(pul, "cosygpmfqf")) || (strstr (pul, "cosygpmf.pg")))
	{
	sprintf(au_p,"service-cosy-proc");
		STOREPAR("AUNMP", au_p);
	XAU("service-cosy-proc",cmd); 
  break;
	}
  if ((strstr(pul, "hsqc")) || (strstr (pul, "hmqc")))
	{
	sprintf(au_p,"service-hsqc-ed-proc");
		STOREPAR("AUNMP", au_p);
	XAU("service-hsqc-ed-proc",cmd)
	break;
	}
  if ((strstr(pul, "hmbc")) || (strstr (pul, "impact")))
	{
	sprintf(au_p,"service-hmbc-proc");
		STOREPAR("AUNMP", au_p)
	XAU("service-hmbc-proc",cmd)
	break;
	}
   if ((strstr(pul, "roesy")) || (strstr(pul, "noesy")) || (strstr(pul, "mlevph")))
	{
	sprintf(au_p,"service-noesy-proc");
		STOREPAR("AUNMP", au_p)
	XAU("service-noesy-proc",cmd)
	break;
	}
 }	
i_expno++;
}
/*
if ((strstr(homepul, "cosygpmfqf")) || (strstr (homepul, "cosygpmf.pg"))
	{
	SETCURDATA
	sprintf(au_p,"service-cosy-proc");
		STOREPAR("AUNMP", au_p)
	XAUP
	}
	
		
		
		||
		(strstr(homepul, "roesy")) || 
		(strstr(homepul, "noesy")) ||
		(strstr(homepul, "mlevph"))
		)
*/



QUIT