/*Idea by gsk, heavily modded by djh35*/
/*start from a data set, and it will process all files in the directory */
/*that dataset is in*/
/*relies on service-def-proc*/


char homepul[128], pul[128], data_path[PATH_MAX], dataset_path[PATH_MAX], pdf_path[PATH_MAX];
char exp_name[PATH_MAX], pp_path[PATH_MAX], fid_path[PATH_MAX],  ser_path[PATH_MAX];
char nuc1[20], nuc2[20],au_p[128],cmd_str[511];
char diskin[PATH_MAX]="/media/sf_nmr-in";
char diskout[PATH_MAX]="nmr-out";
char suser[PATH_MAX]="duncan";

char **listfile;

int mode, dexpno, i_expno, i_limit, Hexpno, Cexpno, no_hours=0;
float Hsr, Csr;

Hexpno=0;
Cexpno=0;
i_expno=1;
Hsr=0.0;
Csr=0.0;
XCMD("setdef ackn no");
XCMD("setdef stdout off");
XCMD("setdef stderr off");

//DATASET ( "junk", 10, 1, diskin, suser)
GETCURDATA
VIEWDATA_SAMEWIN
/*I have a script to automatically get data... possible to call this...*/
//GETINT("Enter the number of hours to get and process. This will reprocess all the data in the current directory. Enter zero if you don't want to get data, only process this.",no_hours);
GETINT("Enter a number bigger than zero to process the data. THIS WILL ERASE ALL YOUR PROCESSED data here.",no_hours);
GETINT("ARE YOU SURE YOU WANT TO DO THIS???\n Enter minus one if you want to quit now.",no_hours);
if (no_hours <= 0)
{
exit(1);
}
GETCURDATA
dexpno = expno;

FETCHPAR("PULPROG", &homepul)

(void) sprintf(data_path, "%s%s", disk, user);
i1 = getdir (data_path,&listfile,NULL);

//Ok, the below is what we need to loop over
//need to set the below to be the entry in the listfile
(void) sprintf(dataset_path, "%s%s/%s", disk, user, name);

//but for now; lets just print the list
TIMES(i1)
  sprintf(exp_name, "%s", listfile[loopcount1]);
  sprintf(dataset_path, "%s%s/%s", disk, user, exp_name);
  i_limit = gethighest(dataset_path);
  i_limit = i_limit-1;
  
  i_expno = 1;
 //Proc_err(INFO_OPT, "%s", exp_name);
 DATASET(exp_name, i_limit, 1, disk, user)
 VIEWDATA_SAMEWIN
 GETCURDATA

//Proc_err(INFO_OPT,"%s,%i",dataset_path,i_limit);
//i_limit = gethighest(dataset_path);

if( i_limit > 999 ) i_limit = 999;

while (i_expno <= i_limit)
{
	//Proc_err(INFO_OPT,"ixpno=%i,ilimit=%i"	, i_expno, i_limit);
	sprintf( pp_path, "%s%s/%s/%d/pulseprogram", disk, user, name, i_expno );
	sprintf( fid_path, "%s%s/%s/%d/fid", disk, user, name, i_expno );
	sprintf( ser_path, "%s%s/%s/%d/ser", disk, user, name, i_expno );
	if( (access( pp_path, R_OK ) == 0) && ((access(fid_path, R_OK ) == 0) || (access( ser_path, R_OK) == 0) ) )
	 {
	 	 DATASET(name, i_expno, procno, disk, user)
	 	 VIEWDATA_SAMEWIN
	 	 XAU("service-def-proc","");
	 	 sprintf( pdf_path, "%s/../../%s/pdf",dataset_path,dataset_path,diskout);
	 	 if (i_argc == 3 )
	 	 {
	 	 	XAU("service-pdfit", cmd);
	 	 }
	 }
 	next:
 	i_expno++;
}
//move the current dataset
sprintf( cmd_str, "cp -r -p %s  %s/../../%s/%s",dataset_path,dataset_path,diskout,name);
Proc_err(INFO_OPT,"command string is - %s"	, cmd_str);
system(cmd_str);
sprintf(cmd_str, "rm -r %s", dataset_path);
Proc_err(INFO_OPT,"command string is - %s"	, cmd_str);
system(cmd_str);
END
XCMD("setdef ackn ok");
XCMD("setdef stdout on");
XCMD("setdef stderr on");

QUIT

#include <stdio.h>
#include <inc/sysutil>