/*
Program:	as_prochsqc
Version:	1.0
Author:		Sean Lynn
Date:     12/1/2007
Description:	process to get correct phase and reference parameters,
              set layout.

Modded by djh 2012
*/
int finish=0,suffix=1;
float hsr;
char pdfname[PATH_MAX]="";
char pul[64];
GETCURDATA

XCMD("serv_projref")

FETCHPAR("SR",&hsr)
hsr=hsr-1.0; /* Sean thinks this is due to an isotope shift */
STOREPAR("SR",hsr)
STOREPAR("layout", "+/service-hmbc.xwp")


/*process it*/	
XFB
FETCHPAR("PULPROG", &pul);
if (strstr(pul, "hmbcet")||(strstr(pul, "impact"))) /*all constant time?*/
 			{
 				XF2M;
 			}
ABS1
ABS2
XAU("clev",cmd)
while (finish==0)
{
	sprintf( pdfname, "%s/%s-hmbc-%d.pdf",PROCPATH(0),name,suffix);
	//sprintf(pdfname, "%s%s/%s/%d/pdata/%d/%s-%d.pdf", disk, user, name, expno, procno, name,suffix );
	if(access(pdfname, R_OK) != 0) // if we can't read pdf file assume its not there
	{
		finish=1;
	}
	else
	{
		suffix++;
		
	}
}
/*make pdf*/

AUTOPLOT_TO_FILE(pdfname);

QUIT

