/*
Program:	as_prochsqc
Version:	1.0
Author:		Sean Lynn
Date:     12/1/2007
Description:	process to get correct phase and reference parameters,
              set layout.

Heavily modified by DJH35 at Dept. Chemistry University Of Cambridge
*/
int new_exp,finish=0,suffix=1,nus_or_not=1;
float hsr;
char pdfname[PATH_MAX]="";

GETCURDATA 
FETCHPAR("FNTYPE",&nus_or_not)
if (nus_or_not<2)
	{
	XAU("proc_2dphf2het",cmd)
	}
	else
	{
		XFB
	}
	
XAU("serv_projref",cmd)  
ABS1
ABS2
XCMD("clev")
FETCHPAR("SR",&hsr)
STOREPAR("SR",hsr)
//check for 13c and set layout accordingly
GETCURDATA3
if ( expno3 == expno )
	{
	STOREPAR("layout", "+/service-hsqc-ed.xwp")
	}
if ( expno3 != expno)
	{
	STOREPAR("layout", "+/service-hsqc-ed.xwp")
	}
while (finish==0)
{
	sprintf( pdfname, "%s/%s-13c-ed-%d.pdf",PROCPATH(0),name,suffix);
	//sprintf(pdfname, "%s%s/%s/%d/pdata/%d/%s-%d.pdf", disk, user, name, expno, procno, name,suffix );
	if(access(pdfname, R_OK) != 0) // if we can't read pdf file assume its not there
	{
		finish=1;
	}
	else
	{
		suffix++;
		
	}
}
AUTOPLOT_TO_FILE(pdfname);

QUIT

