/*
To automatically process an HSQC
DJH35 at Dept. Chemistry Cambridge  University	
Sept 2018. Removed legacy code. Logic to not phase NUS data as it takes too long
*/
int finish=0,suffix=1,nus_or_not=1;
char pdfname[PATH_MAX]="";

GETCURDATA 
FETCHPAR("FNTYPE",&nus_or_not)
if (nus_or_not<2)
	{
	XAU("proc_2dphf2het",cmd)
	}
	else
	{
		XFB
	}
	
XAU("serv_projref",cmd)  
ABS1
ABS2
XCMD("clev")

STOREPAR("layout", "+/service-hsqc-ed.xwp")

while (finish==0)
{
	sprintf( pdfname, "%s/%s-13c-ed-%d.pdf",PROCPATH(0),name,suffix);

	if(access(pdfname, R_OK) != 0) // if we can't read pdf file assume its not there
	{
		finish=1;
	}
	else
	{
		suffix++;
		
	}
}
AUTOPLOT_TO_FILE(pdfname);

QUIT

